<MorpheusModel version="1">
    <Description>
        <Title>Example-Convergence-Extension</Title>
        <Details></Details>
    </Description>
    <Global/>
    <Space>
        <Lattice class="square">
            <Size symbol="size" value="500,500,0"/>
            <Neighborhood>
                <Distance>3</Distance>
            </Neighborhood>
        </Lattice>
        <MembraneLattice>
            <Resolution symbol="memsize" value="20"/>
            <SpaceSymbol symbol="m"/>
        </MembraneLattice>
        <SpaceSymbol symbol="l"/>
    </Space>
    <Time>
        <TimeSymbol symbol="TIME"/>
        <StartTime value="0"/>
        <StopTime value="40000"/>
        <!--    <Disabled>
        <RandomSeed value="4"/>
    </Disabled>
-->
        <!--    <Disabled>
        <SaveInterval value="100"/>
    </Disabled>
-->
    </Time>
    <CellTypes>
        <CellType class="biological" name="ct1">
            <PropertyVector symbol="d" value="0.0, 0.0, 0.0"/>
            <VolumeConstraint target="2750" strength="1"/>
            <MembraneProperty symbol="c" value="sin( (m.phi - 0.75*pi) * 2 ) + 1.0">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <SurfaceConstraint target="1" strength="5"/>
            <Property symbol="pos" value="0.0"/>
            <PersistentMotion decay-time="10" strength="1"/>
        </CellType>
        <CellType class="medium" name="medium">
            <MembraneProperty symbol="c" value="">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0.0">
            <Contact type1="ct1" type2="medium" value="500"/>
            <Contact type1="ct1" type2="ct1" value="0">
                <HomophilicAdhesion strength="-1500" adhesive="c"/>
            </Contact>
        </Interaction>
        <MCSDuration unit="sec" value="1"/>
        <MetropolisKinetics temperature="250" stepper="edgelist">
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </MetropolisKinetics>
    </CPM>
    <CellPopulations>
        <Population size="0" type="ct1">
            <InitProperty symbol-ref="pos">
                <Expression>rint(cell.center.x / 50)</Expression>
            </InitProperty>
            <InitCellObjects mode="distance">
                <Arrangement repetitions="6,4,0" displacements="64,80,0">
                    <Object>
                        <Sphere radius="32" center="82,82,0"/>
                    </Object>
                </Arrangement>
                <Arrangement repetitions="6,4,0" displacements="64,80,0">
                    <Object>
                        <Sphere radius="32" center="114,122,0"/>
                    </Object>
                </Arrangement>
            </InitCellObjects>
        </Population>
        <BoundaryValue boundary="x" value="medium"/>
        <BoundaryValue boundary="-x" value="medium"/>
        <BoundaryValue boundary="y" value="medium"/>
        <BoundaryValue boundary="-y" value="medium"/>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="1000" decorate="false">
            <Terminal pointsize="0.60" name="png"/>
            <Plot>
                <Cells value="c"/>
            </Plot>
        </Gnuplotter>
        <Logger time-step="250">
            <Input>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
            </Input>
            <Output>
                <TextOutput file-separation="cell"/>
            </Output>
            <Plots>
                <Plot time-step="2500">
                    <Style point-size="0.5" style="lines"/>
                    <Terminal terminal="png"/>
                    <X-axis minimum="0" maximum="size.x">
                        <Symbol symbol-ref="cell.center.x"/>
                    </X-axis>
                    <Y-axis minimum="0" maximum="size.y">
                        <Symbol symbol-ref="cell.center.y"/>
                    </Y-axis>
                    <Color-bar>
                        <Symbol symbol-ref="cell.id"/>
                    </Color-bar>
                    <!--    <Disabled>
        <Color-bar>
            <Symbol symbol-ref="TIME"/>
        </Color-bar>
    </Disabled>
-->
                </Plot>
            </Plots>
        </Logger>
    </Analysis>
</MorpheusModel>
