<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Title>Example-Proliferation2D</Title>
        <Details>Illustrates Plugin CellDivision under CellTypes
        
        - here, any cell can divide symmetrically with probability p and daughters then increase their counter d of dividion rounds by 1 (plotted as number inside each cell)

        - to highlight recent division events, both daughters are labeled red for some time (controled by a counter c as CellProperty)
        
        </Details>
    </Description>
    <Global>
        <Variable symbol="c" value="0.0"/>
    </Global>
    <Space>
        <Lattice class="hexagonal">
            <Size symbol="size" value="500, 500, 0"/>
            <BoundaryConditions>
                <Condition type="periodic" boundary="x"/>
                <Condition type="periodic" boundary="y"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime symbol="stoptime" value="4e4"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType name="cells" class="biological">
            <Property symbol="p" value="5e-5" name="proliferation rate"/>
            <Property symbol="d" value="0" name="divisions"/>
            <Property symbol="c" value="0" name="color"/>
            <VolumeConstraint strength="1" target="500"/>
            <SurfaceConstraint mode="aspherity" strength="1" target="0.9"/>
            <System solver="Euler [fixed, O(1)]" time-step="1.0">
                <Rule symbol-ref="c">
                    <Expression>if( c > 0, c-1, 0)</Expression>
                </Rule>
            </System>
            <CellDivision division-plane="random">
                <Condition>rand_uni(0,1) &lt; p</Condition>
                <Triggers>
                    <Rule symbol-ref="d">
                        <Expression>d+1</Expression>
                    </Rule>
                    <Rule symbol-ref="c" name="color after division">
                        <Expression>1000</Expression>
                    </Rule>
                </Triggers>
            </CellDivision>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0">
            <Contact value="-4" type2="cells" type1="cells"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1.0"/>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="3" yield="0.1"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>3</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population type="cells" size="1">
            <InitCircle mode="regular" number-of-cells="20">
                <Dimensions radius="35" center="250, 250, 0"/>
            </InitCircle>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter decorate="false" time-step="1000">
            <Terminal name="png"/>
            <Plot>
                <Cells value="c" min="0.0" max="1">
                    <ColorMap>
                        <Color value="1" color="red"/>
                        <Color value="0.0" color="green"/>
                    </ColorMap>
                </Cells>
                <CellLabels value="d" fontsize="8"/>
            </Plot>
        </Gnuplotter>
        <Logger time-step="100">
            <Input>
                <Symbol symbol-ref="celltype.cells.size"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots>
                <Plot log-commands="true" time-step="10000">
                    <Style grid="true" style="linespoints" point-size="0.5"/>
                    <Terminal terminal="png"/>
                    <X-axis minimum="0" maximum="stoptime">
                        <Symbol symbol-ref="time"/>
                    </X-axis>
                    <Y-axis minimum="0" maximum="100">
                        <Symbol symbol-ref="celltype.cells.size"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
        <DependencyGraph reduced="false" include-tags="#untagged" format="svg"/>
    </Analysis>
</MorpheusModel>
