<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Title>Example-RunAndTumble</Title>
        <Details>Models a Levy walk - a random walk strategy that is superior for searching due to it's high spatial coverage.

Shows how to manipulate PropertyVectors (x,z,y) using the VectorRule. An expression for each of the three coordinates must be given, separated by a comma ",".</Details>
    </Description>
    <Global>
        <Constant symbol="tumble.run_duration" value="0"/>
    </Global>
    <Space>
        <Lattice class="hexagonal">
            <Size symbol="size" value="300, 300, 0"/>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <BoundaryConditions>
                <Condition type="periodic" boundary="x"/>
                <Condition type="periodic" boundary="y"/>
            </BoundaryConditions>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="10000"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="amoeba">
            <VolumeConstraint strength="1" target="200"/>
            <ConnectivityConstraint/>
            <PropertyVector symbol="move_dir" value="0.0, 0.0, 0.0"/>
            <Property name="run duration" symbol="tumble.run_duration" value="0.0"/>
            <Property name="last tumble event" symbol="tumble.last" value="0"/>
            <Function name="time left" symbol="tumble.time_left">
                <Expression>tumble.last + tumble.run_duration - time</Expression>
            </Function>
            <DirectedMotion direction="move_dir" strength="0.2"/>
            <Event time-step="5" trigger="when true">
                <Condition>time >= tumble.last + tumble.run_duration</Condition>
                <Rule symbol-ref="tumble.last">
                    <Expression>time</Expression>
                </Rule>
                <Rule symbol-ref="tumble.run_duration" name="new update time">
                    <Expression>20 * rand_gamma(0.5, 5)</Expression>
                </Rule>
                <Intermediate symbol="angle" value="rand_uni(0, 2*pi)"/>
                <VectorRule symbol-ref="move_dir" notation="r,φ,θ">
                    <Expression>1, angle, 0</Expression>
                </VectorRule>
            </Event>
        </CellType>
        <CellType class="medium" name="medium"/>
    </CellTypes>
    <CPM>
        <Interaction>
            <Contact type1="amoeba" value="4" type2="medium"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="0.6"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Distance>2.5</Distance>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population type="amoeba" size="1">
            <Cell name="1" id="1">
                <Nodes>50,100,0</Nodes>
            </Cell>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="200" decorate="false">
            <Terminal name="png"/>
            <Plot>
                <Cells min="0.0">
                    <ColorMap>
                        <Color color="red" value="0"/>
                        <Color color="blue" value="2"/>
                    </ColorMap>
                </Cells>
                <CellArrows orientation="5 * move_dir"/>
            </Plot>
        </Gnuplotter>
        <Logger time-step="20">
            <Input>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots>
                <Plot time-step="5000">
                    <Style style="lines" line-width="2.0"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="cell.center.x"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="cell.center.y"/>
                    </Y-axis>
                    <Color-bar>
                        <Symbol symbol-ref="tumble.run_duration"/>
                    </Color-bar>
                </Plot>
            </Plots>
            <Restriction/>
        </Logger>
        <DependencyGraph reduced="false" format="svg"/>
    </Analysis>
</MorpheusModel>
