<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Title>Example-CellCycle-MultiScale</Title>
        <Details>- NOTE: cell Property 'dist' does not give correct values (see Logger): values are identical for all cells!


ODE model of Xenopus oocyte cell cycle adopted from:

James Ferrell, Tony Yu-Chen Tsai and Qiong Yang (2011) Modeling the Cell Cycle: Why Do Certain Circuits Oscillate?, Cell 144, p874-885. http://dx.doi.org/10.1016/j.cell.2011.03.006</Details>
    </Description>
    <Global>
        <Field value="0" symbol="g">
            <Diffusion rate="100"/>
        </Field>
        <System solver="Runge-Kutta [fixed, O(4)]" time-step="0.1">
            <DiffEqn symbol-ref="g">
                <Expression>APC - 0.05*g</Expression>
            </DiffEqn>
        </System>
        <Constant value="0.0" symbol="CDK1"/>
        <Constant value="0.0" symbol="APC"/>
        <Constant value="0.0" symbol="Plk1"/>
        <Constant value="0.0" symbol="dist"/>
        <Constant value="0.0" symbol="posx"/>
    </Global>
    <Space>
        <Lattice class="hexagonal">
            <Size value="250, 250, 0" symbol="size"/>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2"/>
        <TimeSymbol symbol="t"/>
        <RandomSeed value="3445"/>
    </Time>
    <CellTypes>
        <CellType name="cells" class="biological">
            <Property value="0" name="Cyclin-dependent kinase 1" symbol="CDK1"/>
            <Property value="0" name="Polo-like kinase 1" symbol="Plk1"/>
            <Property value="0" name="Anaphase-promoting complex" symbol="APC"/>
            <System solver="Dormand-Prince [adaptive, O(5)]" time-scaling="15">
                <DiffEqn symbol-ref="CDK1">
                    <Expression>α1+(g_l) - β1 * CDK1 * (APC^n / (K^n + APC^n))</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="Plk1">
                    <Expression>α2*(1-Plk1) * ((CDK1^n) / (K^n + CDK1^n)) - β2*Plk1</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="APC">
                    <Expression>α3*(1- APC) * ((Plk1^n) / (K^n + Plk1^n)) - β3*APC</Expression>
                </DiffEqn>
                <Constant value="8" name="Hill coefficient" symbol="n"/>
                <Constant value="0.5" name="Michaelis constant" symbol="K"/>
                <Constant value="0.1" symbol="α1"/>
                <Constant value="3.0" symbol="α2"/>
                <Constant value="3.0" symbol="α3"/>
                <Constant value="3.0" symbol="β1"/>
                <Constant value="1.0" symbol="β2"/>
                <Constant value="1.0" symbol="β3"/>
            </System>
            <Property value="0" name="divisions" symbol="d"/>
            <Property value="0" name="division timeout" symbol="c"/>
            <Property value="25000" name="Target volume" symbol="Vt"/>
            <VolumeConstraint target="Vt" strength="1"/>
            <SurfaceConstraint target="1.0" mode="aspherity" strength="0.5"/>
            <Event name="reset timeout" trigger="on change">
                <Condition>CDK1&lt;0.25</Condition>
                <Rule symbol-ref="c">
                    <Expression>0</Expression>
                </Rule>
            </Event>
            <Property value="0.0" symbol="g_l"/>
            <CellDivision division-plane="minor">
                <Condition>CDK1 > 0.5 and c == 0 and cell.volume > 100</Condition>
                <Triggers>
                    <Rule symbol-ref="d">
                        <Expression>d+0.5</Expression>
                    </Rule>
                    <Rule symbol-ref="c">
                        <Expression>1</Expression>
                    </Rule>
                    <Rule symbol-ref="Vt">
                        <Expression>Vt/2</Expression>
                    </Rule>
                </Triggers>
            </CellDivision>
            <Property value="sqrt( (cell.center.x-size.x/2)^2 + (cell.center.y-size.y/2)^2 )  " symbol="dist"/>
            <Mapper name="report field">
                <Input value="g"/>
                <Output mapping="average" symbol-ref="g_l"/>
            </Mapper>
        </CellType>
        <CellType name="Medium" class="medium">
            <Property value="0" name="Anaphase-promoting complex" symbol="APC"/>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0">
            <Contact value="-12" type1="cells" type2="cells"/>
            <Contact value="0" type1="cells" type2="Medium"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1e-4"/>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="2" yield="0.1"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>3</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="0" type="cells">
            <InitCellObjects mode="order">
                <Arrangement displacements="1, 1, 1" repetitions="1, 1, 1">
                    <Sphere radius="45" center="125, 110, 0"/>
                </Arrangement>
            </InitCellObjects>
            <InitProperty symbol-ref="CDK1">
                <Expression>0.25</Expression>
            </InitProperty>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter decorate="false" time-step="0.1">
            <Terminal name="png"/>
            <Plot>
                <Cells value="APC" opacity="0.5">
                    <ColorMap>
                        <Color value="0.5" color="blue"/>
                        <Color value="0.25" color="white"/>
                    </ColorMap>
                </Cells>
                <Field isolines="5" symbol-ref="g" coarsening="2" min="0.0">
                    <ColorMap>
                        <Color value="1.0" color="red"/>
                        <Color value="0.5" color="yellow"/>
                        <Color value="0.0" color="white"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
        <Logger time-step="0.002">
            <Input>
                <!--    <Disabled>
        <Symbol symbol-ref="APC"/>
    </Disabled>
-->
                <!--    <Disabled>
        <Symbol symbol-ref="CDK1"/>
    </Disabled>
-->
                <!--    <Disabled>
        <Symbol symbol-ref="Plk1"/>
    </Disabled>
-->
                <Symbol symbol-ref="dist"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <!--    <Disabled>
        <Plots>
            <Plot time-step="0.25">
                <Style style="points"/>
                <Terminal terminal="png"/>
                <X-axis>
                    <Symbol symbol-ref="t"/>
                </X-axis>
                <Y-axis>
                    <Symbol symbol-ref="APC"/>
                </Y-axis>
                <Color-bar>
                    <Symbol symbol-ref="dist"/>
                </Color-bar>
            </Plot>
        </Plots>
    </Disabled>
-->
        </Logger>
        <DependencyGraph format="svg" reduced="false" include-tags="#untagged"/>
    </Analysis>
</MorpheusModel>
