<MorpheusModel version="4">
    <Description>
        <Title>Example-CellPolarity</Title>
        <Details>Chemotaxis of polarized cell
----------------------------
Show feedback between cell motility, cell polarization and external gradient.
 
Two simple polarization models can be enabled/disabled:
- Substrate-depletion model: no repolarization
- Wave-pinning model: repolarization
 
PDE Equation:
- Switch on/off and change gradients </Details>
    </Description>
    <Global>
        <Field value="l.x / lattice.x" symbol="U">
            <Diffusion rate="0.0"/>
        </Field>
        <!--    <Disabled>
        <Equation symbol-ref="U">
            <Expression>l.x / lattice.x +
0*if( t > 500 and t &lt; 1500, l.x / lattice.x, 0)</Expression>
        </Equation>
    </Disabled>
-->
        <Constant value="0.0" symbol="c"/>
        <!--    <Disabled>
        <Constant value="0.0" symbol="A"/>
    </Disabled>
-->
    </Global>
    <Space>
        <Lattice class="cubic">
            <Size value="150, 75, 50" symbol="lattice"/>
            <BoundaryConditions>
                <Condition boundary="x" type="noflux"/>
                <Condition boundary="y" type="periodic"/>
            </BoundaryConditions>
            <NodeLength value="1.0"/>
            <Neighborhood>
                <Distance>2.0</Distance>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="l"/>
        <MembraneLattice>
            <Resolution value="50" symbol="memsize"/>
            <SpaceSymbol symbol="m"/>
        </MembraneLattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2000"/>
        <SaveInterval value="0"/>
        <RandomSeed value="0"/>
        <TimeSymbol symbol="t"/>
    </Time>
    <CellTypes>
        <CellType name="cells" class="biological">
            <Chemotaxis field="U" retraction="true" strength="100*(A)"/>
            <VolumeConstraint target="5000" strength="0.1"/>
            <SurfaceConstraint target="1" mode="aspherity" strength="0.05"/>
            <MembraneProperty value="0.5" name="A" symbol="A">
                <Diffusion rate="0.05"/>
            </MembraneProperty>
            <MembraneProperty value="0.5" name="B" symbol="B">
                <Diffusion rate="1"/>
            </MembraneProperty>
            <MembraneProperty value="0" name="chemotactic strength" symbol="c">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <MembraneProperty value="0" name="signal" symbol="s">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <Property value="0" symbol="l_U"/>
            <!--    <Disabled>
        <System name="Substrate-Depletion" solver="Dormand-Prince [adaptive, O(5)]">
            <Rule symbol-ref="c">
                <Expression>A^2*5e1</Expression>
            </Rule>
            <DiffEqn symbol-ref="A">
                <Expression>(rho*A^2) / B - mu_a * A + rho_a + 0.001*s</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="B">
                <Expression>(rho*A^2) - mu_i * B</Expression>
            </DiffEqn>
            <Constant value="0.01" symbol="rho_a"/>
            <Constant value="0.03" symbol="mu_i"/>
            <Constant value="0.02" symbol="mu_a"/>
            <Constant value="0.001" symbol="rho"/>
        </System>
    </Disabled>
-->
            <System name="WavePinning" solver="Dormand-Prince [adaptive, O(5)]">
                <Constant value="0.067" symbol="k_0"/>
                <Constant value="1" symbol="gamma"/>
                <Constant value="0.25" symbol="delta"/>
                <Constant value="1" symbol="K"/>
                <Constant value="5.0" name="spatial-length-signal" symbol="sigma"/>
                <Constant value="4" name="Hill coefficient" symbol="n"/>
                <Intermediate value="B*(k_0+ s + (gamma*A^n) / (K^n + A^n) ) - delta*A" symbol="F"/>
                <DiffEqn symbol-ref="A">
                    <Expression>F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="B">
                    <Expression>-F</Expression>
                </DiffEqn>
                <Rule symbol-ref="c">
                    <Expression>A^2*1000</Expression>
                </Rule>
            </System>
            <Mapper>
                <Input value="U"/>
                <Output mapping="average" symbol-ref="s"/>
            </Mapper>
        </CellType>
        <CellType name="medium" class="medium">
            <Property value="0" symbol="l_U"/>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0.0">
            <Contact value="-10" type1="cells" type2="medium"/>
            <Contact value="-20" type1="cells" type2="cells"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="1" yield="0.05"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="0" type="cells">
            <!--    <Disabled>
        <InitRectangle number-of-cells="1" mode="regular">
            <Dimensions size="150, 75, 50" origin="0.0, 0.0, 0.0"/>
        </InitRectangle>
    </Disabled>
-->
            <Cell name="1" id="1">
                <Nodes>25 37 25</Nodes>
            </Cell>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="50">
            <Terminal name="png"/>
            <Plot slice="25">
                <Field symbol-ref="U"/>
                <Cells value="A"/>
            </Plot>
        </Gnuplotter>
        <TiffPlotter format="8bit" time-step="100" OME-header="false">
            <Channel symbol-ref="cell.id" celltype="cells"/>
            <Channel symbol-ref="c" celltype="cells"/>
            <Channel symbol-ref="U"/>
        </TiffPlotter>
        <Logger time-step="50">
            <Input>
                <Symbol symbol-ref="A"/>
            </Input>
            <Output>
                <TextOutput file-format="matrix"/>
            </Output>
            <Plots>
                <SurfacePlot time-step="50">
                    <Color-bar>
                        <Symbol symbol-ref="A"/>
                    </Color-bar>
                    <Terminal terminal="png"/>
                </SurfacePlot>
            </Plots>
            <Restriction>
                <Celltype celltype="cells"/>
            </Restriction>
        </Logger>
        <DependencyGraph format="svg" reduced="false" include-tags="#untagged"/>
    </Analysis>
</MorpheusModel>
