<MorpheusModel version="4">
    <Description>
        <Title>Example-ActivatorInhibitor-2D</Title>
        <Details></Details>
    </Description>
    <Global>
        <Field name="activator" value="rand_norm(0.5,0.1)" symbol="a">
            <Diffusion rate="0.02"/>
        </Field>
        <Field name="inhibitor" value="0.1" symbol="i">
            <Diffusion rate="1"/>
        </Field>
        <System name="Meinhardt" time-step="5" solver="Runge-Kutta [fixed, O(4)]">
            <Constant value="0.001" symbol="rho"/>
            <Constant value="0.001" symbol="rho_a"/>
            <Constant value="0.03" symbol="mu_i"/>
            <Constant value="0.02" symbol="mu_a"/>
            <Constant value="0.10" symbol="kappa"/>
            <DiffEqn symbol-ref="a">
                <Expression>(rho/i)*((a^2)/(1 + kappa*a^2)) - mu_a * a + rho_a</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="i">
                <Expression>rho*((a^2)/(1+kappa*a^2)) - mu_i *i</Expression>
            </DiffEqn>
        </System>
    </Global>
    <Space>
        <Lattice class="square">
            <Size value="150, 150, 0" symbol="size"/>
            <NodeLength value="1"/>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="12500"/>
        <SaveInterval value="0"/>
        <RandomSeed value="2"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <Analysis>
        <Gnuplotter decorate="false" time-step="500">
            <Terminal size="400 400 0" name="png"/>
            <Plot>
                <Field min="0" symbol-ref="a"/>
            </Plot>
        </Gnuplotter>
        <Logger time-step="250">
            <Input>
                <Symbol symbol-ref="a"/>
            </Input>
            <Output>
                <TextOutput file-format="csv"/>
            </Output>
            <Plots>
                <Plot time-step="0">
                    <Style style="lines" line-width="5.0"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="space.x"/>
                    </X-axis>
                    <Y-axis minimum="0" maximum="3">
                        <Symbol symbol-ref="a"/>
                    </Y-axis>
                    <Color-bar>
                        <Symbol symbol-ref="i"/>
                    </Color-bar>
                    <Range>
                        <Data/>
                        <Time mode="current"/>
                    </Range>
                </Plot>
            </Plots>
            <Restriction>
                <Slice axis="y" value="size.y/2"/>
            </Restriction>
        </Logger>
        <Logger time-step="100">
            <Input>
                <Symbol symbol-ref="a"/>
            </Input>
            <Output>
                <TextOutput file-format="matrix"/>
            </Output>
            <Plots>
                <SurfacePlot time-step="500">
                    <Color-bar>
                        <Symbol symbol-ref="a"/>
                    </Color-bar>
                    <Terminal terminal="png"/>
                </SurfacePlot>
            </Plots>
            <Restriction>
                <Slice axis="y" value="size.y/2"/>
            </Restriction>
        </Logger>
        <DependencyGraph include-tags="#untagged" format="svg" reduced="false"/>
    </Analysis>
</MorpheusModel>
