<MorpheusModel version="4">
    <Description>
        <Title>Example-TuringPatterns</Title>
        <Details>
Miyazawa, Okamoto and Kondo, Blending of animal colour patterns by hybridization, Nature Communications, 2010</Details>
    </Description>
    <Global>
        <Field value="4.1+rand_uni(0,1)" symbol="u">
            <Diffusion rate="1"/>
        </Field>
        <Field value="4.84+rand_uni(0,1)" symbol="v">
            <Diffusion rate="20"/>
        </Field>
        <System name="Miyazawa" time-step="0.25" solver="Runge-Kutta [fixed, O(4)]">
            <Function symbol="A">
                <Expression>0.07 + ((0.07 * l.y)/ s.y)</Expression>
            </Function>
            <Constant value="0.08" symbol="B"/>
            <Function symbol="C">
                <Expression>-0.1 + ((0.5 * l.x)/ s.x)</Expression>
            </Function>
            <Constant value="0.03" symbol="D"/>
            <Constant value="0.10" symbol="E"/>
            <Constant value="0.12" symbol="F"/>
            <Constant value="0.06" symbol="G"/>
            <Constant value="20.0" symbol="R"/>
            <Constant value="0.23" symbol="synU_max"/>
            <Constant value="0.50" symbol="synV_max"/>
            <Function symbol="s_u">
                <Expression>max( 0, min( synU_max, A()*u-B*v+C()))</Expression>
            </Function>
            <Function symbol="s_v">
                <Expression>max( 0, min( synV_max, E*u - F))</Expression>
            </Function>
            <DiffEqn symbol-ref="u">
                <Expression>R*(s_u() - D*u)</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="v">
                <Expression>R*(s_v() - G*v)</Expression>
            </DiffEqn>
        </System>
    </Global>
    <Space>
        <Lattice class="square">
            <Size value="512, 512, 0" symbol="s"/>
            <NodeLength value="1"/>
            <BoundaryConditions>
                <Condition boundary="x" type="noflux"/>
                <Condition boundary="y" type="noflux"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="l"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="30"/>
        <SaveInterval value="0"/>
        <RandomSeed value="1"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <Analysis>
        <Gnuplotter decorate="false" time-step="2">
            <Terminal persist="true" name="png"/>
            <Plot>
                <Field symbol-ref="u">
                    <ColorMap>
                        <Color color="black" value="1"/>
                        <Color color="white" value="0.0"/>
                    </ColorMap>
                </Field>
            </Plot>
        </Gnuplotter>
        <Logger time-step="0.0">
            <Input>
                <Symbol symbol-ref="u"/>
            </Input>
            <Output>
                <TextOutput file-format="csv"/>
            </Output>
            <Restriction>
                <Slice axis="x" value="s.x/2"/>
            </Restriction>
            <Plots>
                <Plot title="slice at half of x extension" time-step="-1">
                    <Style style="lines" line-width="3.0"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="l.y"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="u"/>
                    </Y-axis>
                    <Color-bar>
                        <Symbol symbol-ref="v"/>
                    </Color-bar>
                </Plot>
            </Plots>
        </Logger>
        <Logger time-step="2">
            <Input>
                <Symbol symbol-ref="u"/>
            </Input>
            <Output>
                <TextOutput file-format="csv"/>
            </Output>
            <Plots>
                <SurfacePlot time-step="2">
                    <Color-bar>
                        <Symbol symbol-ref="u"/>
                    </Color-bar>
                    <Terminal terminal="png"/>
                </SurfacePlot>
            </Plots>
        </Logger>
        <DependencyGraph include-tags="#untagged" format="svg" reduced="false"/>
    </Analysis>
</MorpheusModel>
