<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Details></Details>
        <Title></Title>
    </Description>
    <Space>
        <SpaceSymbol symbol="space"/>
        <Lattice class="cubic">
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <Size symbol="size" value="300,300,400"/>
            <Domain boundary-type="noflux">
                <Image invert="false" path="fullmini_clean-tunnel2.tif"/>
            </Domain>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="-x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
                <Condition boundary="-y" type="periodic"/>
                <Condition boundary="z" type="constant"/>
                <Condition boundary="-z" type="constant"/>
            </BoundaryConditions>
        </Lattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="200000"/>
        <TimeSymbol symbol="time"/>
        <RandomSeed value="9769"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="cells">
            <VolumeConstraint target="125" strength="1"/>
            <!--    <Disabled>
        <SurfaceConstraint target="1" mode="aspherity" strength="0.1"/>
    </Disabled>
-->
            <!--    <Disabled>
        <Chemotaxis field="c" strength="c_strength"/>
    </Disabled>
-->
            <!--    <Disabled>
        <PersistentMotion decay-time="5" strength="p_strength"/>
    </Disabled>
-->
            <!--    <Disabled>
        <ConnectivityConstraint/>
    </Disabled>
-->
            <Property symbol="c_strength" value="0"/>
            <Property symbol="p_strength" value="10"/>
            <PropertyVector symbol="move_dir" value="0,0,0"/>
            <Property symbol="tumble.run_duration" value="0.0" name="run duration"/>
            <Function symbol="tumble.time_left" name="time left">
                <Expression>tumble.last + tumble.run_duration - time</Expression>
            </Function>
            <DirectedMotion direction="move_dir" strength="40"/>
            <Event trigger="when true" time-step="5">
                <Condition>time >= tumble.last + tumble.run_duration</Condition>
                <Rule symbol-ref="tumble.last">
                    <Expression>time</Expression>
                </Rule>
                <Rule symbol-ref="tumble.run_duration" name="new update time">
                    <Expression>20</Expression>
                </Rule>
                <Intermediate symbol="phi" value="rand_uni(0, 2*pi)"/>
                <VectorRule symbol-ref="move_dir" spherical="true">
                    <Expression>phi,theta,1</Expression>
                </VectorRule>
                <Intermediate symbol="theta" value="rand_uni(-pi/2, pi/2)"/>
            </Event>
            <Property symbol="tumble.last" value="0" name="last tumble event"/>
        </CellType>
        <CellType class="medium" name="medium"/>
        <CellType class="medium" name="scaffold"/>
        <CellType class="medium" name="scheibe"/>
    </CellTypes>
    <Global>
        <!--    <Disabled>
        <Field symbol="concentration" value="space.z">
            <Diffusion rate="0.0"/>
            <Disabled>
                <TIFFReader filename="Half_real_900_concat_2x_compressed_2500um_concentration_corrected.tif"/>
            </Disabled>
        </Field>
    </Disabled>
-->
        <!--    <Disabled>
        <Constant symbol="tumble.run_duration" value="0"/>
    </Disabled>
-->
        <!--    <Disabled>
        <FileField symbol="c" fielddata="U_colmini_v.vtk" stationaryfield="true"/>
    </Disabled>
-->
    </Global>
    <Analysis>
        <Logger time-step="100">
            <Input>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="cell.center.z"/>
                <Symbol symbol-ref="cell.length"/>
                <Symbol symbol-ref="cell.surface"/>
                <Symbol symbol-ref="cell.volume"/>
                <Symbol symbol-ref="move_dir.x"/>
                <Symbol symbol-ref="move_dir.y"/>
                <Symbol symbol-ref="move_dir.z"/>
                <Symbol symbol-ref="move_dir.phi"/>
                <Symbol symbol-ref="move_dir.theta"/>
                <Symbol symbol-ref="move_dir.abs"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <VtkPlotter mode="binary" time-step="10">
            <Channel symbol-ref="cell.id" celltype="cells"/>
        </VtkPlotter>
    </Analysis>
    <CellPopulations>
        <BoundaryValue boundary="domain" value="scaffold"/>
        <Population size="1000" type="cells">
            <InitRectangle mode="random" number-of-cells="1000">
                <Dimensions size="299,299,10" origin="1,1,390"/>
            </InitRectangle>
        </Population>
        <BoundaryValue boundary="z" value="scheibe"/>
        <BoundaryValue boundary="-z" value="scheibe"/>
    </CellPopulations>
    <CPM>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </ShapeSurface>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <MetropolisKinetics temperature="15"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </MonteCarloSampler>
        <Interaction default="0.0">
            <Contact type1="cells" type2="cells" value="40"/>
            <Contact type1="cells" type2="medium" value="90"/>
            <Contact type1="cells" type2="scaffold" value="0"/>
            <Contact type1="scheibe" type2="cells" value="1000"/>
        </Interaction>
    </CPM>
</MorpheusModel>
